// START MIN MAX GAMMA TOOL
// First and last lines comments are tags used to insert the macro in StartUpMacro

// Global variable to pointing to the file itself
var thisfile = getDirectory("plugins") + File.separator + "ULaval" + 
			   File.separator + "Min_Max_Gamma.ijm";
			   
			   
			   	   
// Install the macro on the toolbar for this session
run("Install...","install=["+thisfile+"]");

// Global var for all LUTs in Fiji 1.53t
var lutnames = newArray("Fire", "Grays", "Ice", "Spectrum", "3-3-2 RGB", "Red", "Green", "Blue", "Cyan", "Magenta", "Yellow", "Red/Green", "16 colors", "5 ramps", "6 shades", "blue orange icb", "brgbcmyw", "cool", "Cyan Hot", "edges", "gem", "glasbey", "glasbey inverted", "glasbey on dark", "glow", "Green Fire Blue", "HiLo", "ICA", "ICA2", "ICA3", "Magenta Hot", "mpl-inferno", "mpl-magma", "mpl-plasma", "mpl-viridis", "Orange Hot", "phase", "physics", "Rainbow RGB", "Red Hot", "royal", "sepia", "smart", "thal", "thallium", "Thermal", "unionjack", "Yellow Hot");
var lutstr = newArray(48); lutstr[0] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[1] = "0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 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255"; lutstr[2] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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27"; lutstr[3] = "255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 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0"; lutstr[4] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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192"; lutstr[5] = "0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 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0"; lutstr[6] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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0"; lutstr[7] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[8] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[9] = "0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 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255"; lutstr[10] = "0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 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0"; lutstr[11] = "0, 2, 4, 6, 8, 10, 12, 14, 16, 18, 20, 22, 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0"; lutstr[12] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[13] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[14] = "0, 3, 7, 11, 15, 19, 23, 27, 31, 35, 39, 43, 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247"; lutstr[15] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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250"; lutstr[16] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[17] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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246"; lutstr[18] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[19] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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1"; lutstr[20] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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250"; lutstr[21] = "255, 0, 255, 0, 0, 255, 0, 255, 0, 154, 0, 120, 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101"; lutstr[22] = "0, 0, 16, 0, 88, 128, 136, 184, 0, 0, 0, 104, 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232"; lutstr[23] = "0, 255, 255, 0, 156, 88, 241, 20, 0, 255, 145, 93, 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82"; lutstr[24] = "0, 1, 1, 2, 2, 3, 4, 6, 8, 11, 13, 15, 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255"; lutstr[25] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[26] = "0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 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0"; lutstr[27] = "204, 202, 201, 199, 198, 196, 195, 194, 192, 191, 189, 188, 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204"; lutstr[28] = "255, 252, 250, 247, 245, 243, 240, 238, 236, 233, 231, 229, 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204"; lutstr[29] = "255, 254, 254, 253, 253, 252, 252, 251, 251, 250, 250, 249, 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204"; lutstr[30] = "0, 1, 3, 4, 6, 7, 9, 11, 12, 14, 15, 17, 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255"; lutstr[31] = "0, 0, 0, 1, 1, 1, 2, 2, 3, 4, 4, 5, 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164"; lutstr[32] = "0, 0, 0, 1, 1, 1, 2, 2, 3, 4, 4, 5, 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191"; lutstr[33] = "12, 16, 19, 21, 24, 27, 29, 31, 33, 35, 37, 39, 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33"; lutstr[34] = "68, 68, 68, 69, 69, 69, 70, 70, 70, 70, 71, 71, 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36"; lutstr[35] = "0, 2, 5, 8, 11, 14, 17, 20, 23, 26, 29, 32, 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255"; lutstr[36] = "0, 0, 0, 4, 4, 4, 8, 8, 12, 12, 12, 16, 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0"; lutstr[37] = "47, 46, 45, 44, 42, 41, 40, 39, 37, 36, 35, 33, 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16"; lutstr[38] = "0, 0, 0, 0, 0, 0, 1, 1, 1, 1, 1, 1, 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146"; lutstr[39] = "0, 0, 0, 0, 1, 1, 1, 1, 1, 4, 7, 10, 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255"; lutstr[40] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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254"; lutstr[41] = "0, 43, 57, 65, 66, 67, 68, 69, 70, 71, 72, 73, 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255"; lutstr[42] = "2, 2, 2, 3, 4, 5, 5, 6, 7, 8, 8, 9, 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252"; lutstr[43] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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254"; lutstr[44] = "1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 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253"; lutstr[45] = "70, 70, 70, 70, 70, 70, 70, 70, 70, 70, 70, 70, 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2"; lutstr[46] = "0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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255"; lutstr[47] = "0, 2, 4, 7, 9, 11, 14, 16, 19, 21, 23, 26, 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255";
var xy = "y"; // This tell if the user should move the cursor in x or y

// Detect the actual LUT used from the global list
function detectLUT() {
	// Get the actual LUTs as a string
	str = getLUTasString();
	// Check if the actual LUTs is an official one and return the index// All LUTs in Fiji 1.53t
	for (i = 0; i < lengthOf(lutstr); i++) {
		if(str == lutstr[i]) return i;
	}	
	return -1;
}

function getLUTasString() {
	getLut(r, g, b);
	str = String.join(r)+";"+String.join(g)+";"+String.join(b);
	return str;
}

// Create and set the gamma modified LUT
function createGammaLUT(gamma) {
	Stack.getPosition(channel, slice, frame);
	str = Property.get("LutForCh"+channel); str = split(str, ";");
	r = newArray(256); g = newArray(256); b = newArray(256);
	rtmp = split(str[0],",");
	gtmp = split(str[1],",");
	btmp = split(str[2],",");
	for (i=0; i<256; i++) {
		ri = parseFloat(rtmp[i]);
		gi = parseFloat(gtmp[i]);
		bi = parseFloat(btmp[i]);
		r[i] = pow(ri/255, gamma)*255;
		g[i] = pow(gi/255, gamma)*255;
		b[i] = pow(bi/255, gamma)*255;
	}
	setLut(r,g,b);
}

function cleanGammaAndLutInProperties() {
	// Detect the actual LUT and set gamma to 1 if it's unmodified
	Stack.getPosition(channel, slice, frame);
	detected = -1; detected = detectLUT();
	if (detected != -1) { // If LUT is in standard list set property
		Property.set("GammaForCh"+channel, 1.0);
		Property.set("LutForCh"+channel, lutstr[detected]);
	} else {
		gamma = Property.get("GammaForCh"+channel);
		if (gamma == "") { // If LUT is custom and no properties, gamma is 1
			Property.set("GammaForCh"+channel, 1.0);
			str = getLUTasString();
			Property.set("LutForCh"+channel, str);
		}
	}
}

macro "Min Max Gamma Tool - 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" {
	if (nImages==0) exit;	
	// Only composite images are allowed
	if (bitDepth==24) exit ("Non RGB image expected");
	
	// Clean the gamma and the LUT recorded in image properties
	cleanGammaAndLutInProperties();
	
	// Var for cursor localisation
	x2=-1; y2=-1; z2=-1; flags2=-1;
	range = Math.pow(2, bitDepth)-1;
	getDisplayedArea(xw, yw, width, height);
	
	// Get initial position and initial min/max/gamma
	getCursorLoc(x1, y1, z, flags);
	getMinAndMax(min1, max1);
	Stack.getPosition(channel, slice, frame);
	gamma1 = parseFloat(Property.get("GammaForCh"+channel));
	
	// Initialize flags (left is mouse click)
	shift = false; ctrl = false; alt = false;
	
	// Loop for live changes in min/max/gamma
	while (flags&16!=0) { // flag for left mouse click
	getCursorLoc(x, y, z, flags);
	if (x!=x2 || y!=y2 || z!=z2 || flags!=flags2) {
		if (flags&1!=0) shift = true;
		if (flags&2!=0) ctrl = true;
		if (flags&8!=0) alt = true;
		
		// If no changes
		min2 = min1; max2 = max1; gamma2 = gamma1;
		if (alt) speed = 5; else speed = 1;
		if (xy == "x") cursorChange = (x-x1)/width*speed;
		if (xy == "y") cursorChange = (y-y1)/height*speed;
		
				// Change max
		if (!shift && !ctrl) {
			max2 = max1 + cursorChange/10*range;
			setMinAndMax(min2, max2);
		}
		
		// Change min
		if (!shift && ctrl) {
			min2 = min2 + cursorChange/10*range;
			setMinAndMax(min2, max2);
		}
		
		// Change gamma
		if (shift && !ctrl) {
			gamma2 = gamma1 + cursorChange*2;
			createGammaLUT(gamma2);
			Property.set("GammaForCh"+channel, gamma2);
		}

		// Show status
		status = "!Min (ctrl): "+d2s(min2,0)+
				 "  Max (no key):"+d2s(max2,0)+
				 "  Gamma (shift): "+d2s(gamma2,2);
		showStatus(status);
	}
	x2=x; y2=y; z2=z; flags2=flags;
	wait(10);
	}
	showStatus("");
}

macro "Min Max Gamma Tool Options" {	
	// Avoid error if no image are opened
	min1 = 0; max1 = 65535; gamma1 = 1.0;
	if (nImages > 0) {
		// Only composite images are allowed
		if (bitDepth==24) exit ("Non RGB image expected");
		
		// Clean the gamma and the LUT recorded in image properties
		cleanGammaAndLutInProperties();
		
		// Get min, max and gamma from the image
		getMinAndMax(min1, max1);
		Stack.getPosition(channel, slice, frame);
		gamma1 = parseFloat(Property.get("GammaForCh"+channel));
		if (isNaN(gamma1)) gamma1 = 1.0;
	}

	// Dialog window for the options
	Dialog.create("Min/Max/Gamma");
	Dialog.setInsets(10, 0, 0);
	Dialog.addMessage("Values :") ;
	Dialog.addNumber("min", min1);
	Dialog.addNumber("max", max1);
	Dialog.addNumber("gamma", gamma1);
	Dialog.setInsets(10, 0, 0);
	Dialog.addRadioButtonGroup("Move cursor in :", newArray("x","y"), 1, 2, "y");
	Dialog.setInsets(10, 0, 0);
	Dialog.addMessage("Reset :") ;
	Dialog.setInsets(0, 10, 0);
	Dialog.addCheckboxGroup(2, 2, newArray("min","gamma","max"),newArray(false,false,false));
	Dialog.addHelp("https://github.com/alexandrebastien/ImageJ-Script-Collection");
	str = getStartMenuSTR();
	tool = getTool();
	Dialog.setInsets(10, 0, 0);
	Dialog.addMessage("Toolbar icon :") ;
	Dialog.setInsets(0, 10, 0);
	Dialog.addCheckbox("Yes", tool);
	
	Dialog.show();
	min2 = Dialog.getNumber();
	max2 = Dialog.getNumber();
	gamma2 = Dialog.getNumber();
	xy = Dialog.getRadioButton();
	reset_min = Dialog.getCheckbox();
	reset_gamma = Dialog.getCheckbox();
	reset_max = Dialog.getCheckbox();
	toolNew = Dialog.getCheckbox();

	if (nImages > 0) {	
		// Check for resets
		range = Math.pow(2, bitDepth)-1;
		if (reset_min) min2 = 0;
		if (reset_max) max2 = range;
		if (reset_gamma) gamma2 = 1;
		
		// Apply modifications
		setMinAndMax(min2, max2);
		createGammaLUT(gamma2);
		Property.set("GammaForCh"+channel, gamma2);
	}
	
	// If icon settings changed, write tool in start menu
	if (toolNew == true  &&  tool == false) addTool(true);
	if (toolNew == false &&  tool == true ) addTool(false);
}

// Get the path for Startup Macro
function getStartMenuPath() {
	// There's 2 possible path, depending on Fiji/ImageJ version
	ok = false; path = "";
	path1 = getDirectory("macros") + "StartupMacros.fiji.ijm";
	path2 = getDirectory("macros") + "StartupMacros.ijm";
	// Check if the file exist and return the path
	if (File.exists(path1)) {ok = File.rename(path1, path2); path = path2;}
	else {if (File.exists(path2)) {ok = true; path = path2;}}
	return path;
}

// Read "StartupMacros" file and return content as a string
function getStartMenuSTR() {
	path = getStartMenuPath(); str = "";
	if (path != "") {str = File.openAsString(path);}
	else {showMessage("File: "+path+" not found.");}
	return str;
}

// Check if the tool in "thisfile" is in the Startup Macro
function getTool() {
	path = getStartMenuPath();
	str = File.openAsString(path);
	toolstr = File.openAsString(thisfile);
	toolstrarray = split(toolstr, "\n");
	toolstrarray = Array.filter(toolstrarray, "//");
	startmark = toolstrarray[0];
	start = indexOf(str, startmark);
	if (start == -1) {return false;}
	else {return true}
}

// Add or remove the tool in "thisfile"
function addTool(add) {
	// Get StartupMacros path
	path = getStartMenuPath();
	if (path == "") {showMessage("File: "+path+" not found."); exit;}
	
	// Open the file and check for the marks (1st and last comment lines)
	str = File.openAsString(path);
	toolstr = File.openAsString(thisfile);
	toolstrarray = split(toolstr, "\n");
	toolstrarray = Array.filter(toolstrarray, "//");
	startmark = toolstrarray[0];
	endmark = toolstrarray[lengthOf(toolstrarray)-1];
	start = indexOf(str, startmark);
	end = lastIndexOf(str, endmark);
	
	// Add or remove macro and save
	if (add) str = str + toolstr;
	else str = substring(str, 0, start) +
		       substring(str, end+lengthOf(endmark), lengthOf(str)-1);
	File.saveString(str, path);
}
// END MIN MAX GAMMA TOOL
